load_file("nrngui.hoc")

create PRE
PRE {
  diam=10
  L=10
  insert pas
  g_pas=1/5000
  e_pas=v_init

  insert hh2 // insert Hodgk-Hux. Na+ and K+ currents for spikes
  ek = -90
  gnabar_hh2 = 0.1
  gkbar_hh2 = 0.03
}

/*create soma

/*soma {  
  nseg = 1
  diam = 76.58			
  L = 100
  cm = 1
}
/*
soma {
	insert pas
	g_pas = 3.79e-5
	e_pas = -76.5		// to fit current-clamp data (was -71 to -73)
	cm = 0.88
	Ra = 173

	insert hh2		// insert fast spikes
	ena = 50
	ek = -100
	vtraub_hh2 = -52
	gnabar_hh2 = 0.01		// adapted to single-compartment
	gkbar_hh2 = 0.01 		// adapted to single-compartment

	insert itGHK		// T-current everywhere
	cai = 2.4e-4 
	cao = 2 
	eca = 120 
	shift_itGHK = -1	// screening charge shift + 3 mV error
	gcabar_itGHK = 0.0002
	qm_itGHK = 2.5
	qh_itGHK = 2.5

	insert cad		// calcium diffusion everywhere
	depth_cad = 0.1
	kt_cad = 0		// no pump
	kd_cad = 1e-4
	taur_cad = 5
	cainf_cad = 2.4e-4	
}

soma.pcabar_itGHK = 8e-5

*/


//----------------------------------------------------------------------------
//  create multi-compartment geometry and insert currents
//----------------------------------------------------------------------------

xopen("cells/tc200.geo")		// read geometry file

corrD = 1			// no dendritic surface correction

G_pas = 3.79e-5
E_pas = -73			// to fit current-clamp data (was -71 to -73)
E_pas = -76.5			// within 3 mV error

forall { 			// insert passive current everywhere
	insert pas
	g_pas = G_pas * corrD
	e_pas = E_pas
	cm = 0.88 * corrD
	Ra = 173
	L = L
}

soma {
	g_pas = G_pas
	cm = 0.88

	insert hh2		// insert fast spikes
	ena = 50
	ek = -100
	vtraub_hh2 = -52
	gnabar_hh2 = 0.1
	gkbar_hh2 = 0.1
}


forall {
	insert itGHK		// T-current everywhere
	cai = 2.4e-4 
	cao = 2 
	eca = 120 
	shift_itGHK = -1	// screening charge shift + 3 mV error
	gcabar_itGHK = corrD * 0.0002
	qm_itGHK = 2.5
	qh_itGHK = 2.5

	insert cad		// calcium diffusion everywhere
	depth_cad = 0.1 * corrD
	kt_cad = 0		// no pump
	kd_cad = 1e-4
	taur_cad = 5
	cainf_cad = 2.4e-4	
}



xopen("loc200.oc")		// load procedures for localizing T-current


// uniform T-current with same density as in dissociated cells
// localize(1.7e-5,corrD*1.7e-5,corrD*1.7e-5)


// low density proximal, high distal, to match volt-clamp of intact cells
localize(1.7e-5,corrD*8.5e-5,corrD*8.5e-5)




//----------------------------------------------------------------------------
//  insert electrodes in the soma
//----------------------------------------------------------------------------


//----------------------------------------------------------------------------
//  retinal synapse
//----------------------------------------------------------------------------
objectvar stim      // insert current injection
PRE stim = new IClamp(.5)
stim.del = 2
stim.dur = 2        // 2 ms for single psp, 10 ms for train of psps
stim.amp = 0.1


objref fspikes, vecspikes
fspikes=new File()
fspikes.ropen("/home/major/trial/relay/mar_17/input_lum/lum6_10.dat")
vecspikes=new Vector()
vecspikes.scanf(fspikes)
for total=0, vecspikes.size()-1{
    vecspikes.x(total)=vecspikes.x(total)*1000
}
vecspikes.printf()

vecspikes.play(&stim.amp, 1)

//dend4[0] = new AMPA()          // create synapse
objectvar syn
dend4[0] syn= new AMPA()
dend4[0] syn.loc(0.5)         // assign postsynaptic compartment
setpointer syn.pre, PRE.v(0.5)    // assign presynaptic compartment

Cmax_AMPA   = 1 //  (mM)     max transmitter concentration
Cdur_AMPA   = 1 //  (ms)     transmitter duration (rising phase)
Alpha_AMPA  = 1.1   //  (/ms mM)     forward (binding) rate
Beta_AMPA   = 0.19  //  (/ms)        backward (unbinding) rate
Erev_AMPA   = 0 //  (mV)         reversal potential
Prethresh_AMPA  = 0     //  (mV)         voltage level nec for release
Deadtime_AMPA   = 1 //  (ms)     mimimum time between release events
syn.gmax   = 0.0001 // (umho)       maximum conductance

/*
objref fspikes, vecspikes
fspikes=new File()
strdef extension, basename, filename
extension = "dat"
basename = "cs0_0"
xopen("mar_17/input")
fspikes.ropen("/home/major/trial/relay/mar_17/input_lum/lum6_10.dat")
vecspikes=new Vector()
vecspikes.scanf(fspikes)
for total=0, vecspikes.size()-1{ 
	vecspikes.x(total)=vecspikes.x(total)*1000
}
vecspikes.printf()
*/
/*
objref syn
dend4[0] syn= new ExpSyn(0.5)
syn.tau=0.1
syn.i=1
syn.e=0

objref netcon, nil
netcon = new NetCon(nil, syn)
netcon.weight = 1.425

objref fih
fih = new FInitializeHandler("loadqueue()")
proc loadqueue() { 
	for ii=0, vecspikes.size()-1 {netcon.event(vecspikes.x[ii])
}
}

*/

//----------------------------------------------------------------------------
//  transient time
//----------------------------------------------------------------------------
trans = 00

print " "
print ">> Transient time of ",trans," ms"
print " "



//----------------------------------------------------------------------------
//  setup simulation parameters
//----------------------------------------------------------------------------
Dt = 0.2
npoints = 4000

dt = 0.1			// must be submultiple of Dt
tstart = trans
tstop = trans + npoints * Dt
runStopAt = tstop
steps_per_ms = 1/Dt

celsius = 34			// temperature of John's experiments

v_init = -74			// approximate resting Vm

objref savdata, recv, rect, savspike
rect = new Vector()
recv = new Vector()
rect.record(&t)
recv.record(&soma.v(0.5))
run()
savdata = new File()
savspike= new File()
savdata.wopen("outputV.dat")
savspike.wopen("/home/major/trial/relay/mar_17/result_lum/ampa.dat")
//recv.printf()
timestep=0
for i=0, rect.size()-1 {
    if (recv.x[i] >= -15 && timestep + 1 < rect.x(i)){
	timestep=rect.x(i)
	savspike.printf("%g\n", timestep)
	//savspike.printf("%g \t %g\n", rect.x(i), recv.x(i))
}
}
for i=0,rect.size()-1 {
    savdata.printf("%g \t \t %g\n", rect.x(i), recv.x(i))

}

savdata.close()
savspike.close()






